CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:55
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<myCycle>\w+)_(?P<myWell>\w\d+)c(?P<myChannel>\d+)\.
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'cd44': u'myWell', u'actin_reference': u'myWell', u'tubulin_beta': u'myWell', u'vglut1': u'myWell', u'synapsin_I': u'myWell', u'dna_reference': u'myWell', u'map2': u'myWell', u'pax6': u'myWell', u'vimentin': u'myWell', u'tubulin_alpha': u'myWell', u'vgat': u'myWell', u'gfap': u'myWell'}]
    Image set matching method:Metadata
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    Assignments count:12
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does myChannel "3") (metadata does myCycle "m1m2")
    Name to assign these images:actin_reference
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "4") (metadata does myCycle "m1m2")
    Name to assign these images:dna_reference
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "2") (metadata does myCycle "m1m2")
    Name to assign these images:pax6
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "1") (metadata does myCycle "m1m2")
    Name to assign these images:vgat
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "1") (metadata does myCycle "m3m4")
    Name to assign these images:vimentin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "2") (metadata does myCycle "m3m4")
    Name to assign these images:synapsin_I
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "1") (metadata does myCycle "m5m6")
    Name to assign these images:map2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "2") (metadata does myCycle "m5m6")
    Name to assign these images:gfap
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "1") (metadata does myCycle "m7m8")
    Name to assign these images:vglut1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "2") (metadata does myCycle "m7m8")
    Name to assign these images:tubulin_alpha
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "1") (metadata does myCycle "m9m10")
    Name to assign these images:tubulin_beta
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does myChannel "2") (metadata does myCycle "m9m10")
    Name to assign these images:cd44
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:myWell

IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei.']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
    Select the input image:dna_reference
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):32,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:30
    Suppress local maxima that are closer than this minimum allowed distance:16
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.2
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
ImageMath:[module_num:6|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notes:['(DISABLED. Not all image sets have tuj1). Add the two neurite channels so we can more easily map the neurites later.']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
    Operation:Maximum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:sum_image
    Image or measurement?:Image
    Select the first image:cd44
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:gfap
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:map2
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:pax6
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:synapsin_I
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:tubulin_alpha
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:tubulin_beta
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:vgat
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:vglut1
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:vimentin
    Multiply the tenth image by:1.0
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
Closing:[module_num:7|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
    Select the input image:sum_image
    Name the output image:Closing
    Structuring element:disk,9

EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:Closing
    Name the output image:EnhanceNeurites
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:9
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    Enhancement method:Tubeness
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
Threshold:[module_num:9|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notes:['Do a (pretty permissive) threshold on what areas are Map2/Tuj1 positive. Revisit later to explore ']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
    Select the input image:EnhanceNeurites
    Name the output image:ThresholdNeurites
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ConvertImageToObjects:[module_num:10|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
    Select the input image:ThresholdNeurites
    Name the output object:Neurites
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

IdentifySecondaryObjects:[module_num:11|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notes:['Expand out the cell bodies around the nucleus.  We’ll go no further than 30 pixels, and only into areas with a high enough threshold. Note, the 30 pixel cutoff will need to be adjusted for changes in magnification, binning, or other microscope specific changes.']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBodies
    Select the method to identify the secondary objects:Distance - B
    Select the input image:ThresholdNeurites
    Number of pixels by which to expand the primary objects:50
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:12|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notes:['Signal in the area surrounding a nuclei may contain markers that determine cell  identity.']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellExpanded
    Select the method to identify the secondary objects:Distance - N
    Select the input image:ThresholdNeurites
    Number of pixels by which to expand the primary objects:50
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:13|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
    Select the larger identified objects:CellExpanded
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CellSurrounding
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:Nuclei
    Select objects to measure:CellBodies
    Select objects to measure:CellExpanded
    Select objects to measure:CellSurrounding
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:15|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
    Hidden:13
    Select an image to measure:actin_reference
    Select an image to measure:cd44
    Select an image to measure:gfap
    Select an image to measure:map2
    Select an image to measure:pax6
    Select an image to measure:synapsin_I
    Select an image to measure:tubulin_alpha
    Select an image to measure:tubulin_beta
    Select an image to measure:vgat
    Select an image to measure:vglut1
    Select an image to measure:vimentin
    Select an image to measure:ThresholdNeurites
    Select an image to measure:dna_reference
    Select objects to measure:CellBodies
    Select objects to measure:CellExpanded
    Select objects to measure:CellSurrounding
    Select objects to measure:Nuclei

MeasureImageIntensity:[module_num:16|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
    Select the image to measure:actin_reference
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:cd44
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:dna_reference
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:gfap
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:map2
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:pax6
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:synapsin_I
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:tubulin_alpha
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:tubulin_beta
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:vgat
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:vglut1
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:vimentin
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureImageAreaOccupied:[module_num:17|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Nuclei
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Neurites
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
Closing:[module_num:18|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
    Select the input image:synapsin_I
    Name the output image:Closing_synapsinI
    Structuring element:disk,2

Threshold:[module_num:19|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
    Select the input image:pax6
    Name the output image:Th_pax6
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2
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
Threshold:[module_num:20|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
    Select the input image:vimentin
    Name the output image:Th_vimentin
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:21|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
    Select the input image:gfap
    Name the output image:Th_gfap
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:3.0
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
Threshold:[module_num:22|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
    Select the input image:map2
    Name the output image:Th_map2
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:23|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
    Select the input image:vgat
    Name the output image:Th_vgat
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:3.0
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
Threshold:[module_num:24|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
    Select the input image:tubulin_beta
    Name the output image:th_tubulin_beta
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
EnhanceOrSuppressFeatures:[module_num:25|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
    Select the input image:Closing_synapsinI
    Name the output image:enhance_synapsin1
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Fast

Threshold:[module_num:26|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
    Select the input image:enhance_synapsin1
    Name the output image:Th_synapsin_I
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.7
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:5.0
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
Threshold:[module_num:27|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
    Select the input image:vglut1
    Name the output image:Th_vglut1
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4.0
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
MaskObjects:[module_num:28|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
    Select objects to be masked:Nuclei
    Name the masked objects:Nuclei_pax6_positive
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Th_pax6
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.15
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:29|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
    Select objects to be masked:Nuclei
    Name the masked objects:Nuclei_pax6_negative
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Th_pax6
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.85
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:30|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
    Select objects to be masked:CellBodies
    Name the masked objects:cellbodies_pax6_positive
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei_pax6_positive
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.3
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:31|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
    Select objects to be masked:CellBodies
    Name the masked objects:cellbodies_pax6_negative
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei_pax6_negative
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.3
    Numbering of resulting objects:Renumber
    Invert the mask?:No

ImageMath:[module_num:32|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notes:['(DISABLED. Not all image sets have tuj1). Add the two neurite channels so we can more easily map the neurites later.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:tubulin_b_map2
    Image or measurement?:Image
    Select the first image:th_tubulin_beta
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Th_map2
    Multiply the second image by:1.0
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
MaskObjects:[module_num:33|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
    Select objects to be masked:cellbodies_pax6_negative
    Name the masked objects:Neurons
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:tubulin_b_map2
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.02
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:34|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
    Select objects to be masked:Neurons
    Name the masked objects:Excitatory_Neurons
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Th_vglut1
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.01
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:35|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
    Select objects to be masked:Neurons
    Name the masked objects:Excitatory_Neurons_filtered
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Th_vglut1
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.99
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:36|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
    Select objects to be masked:Excitatory_Neurons_filtered
    Name the masked objects:Inhibitory_Neurons
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Th_vgat
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.01
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:37|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
    Select objects to be masked:cellbodies_pax6_negative
    Name the masked objects:Neurons_filtered
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:tubulin_b_map2
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.98
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:38|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
    Select objects to be masked:Neurons_filtered
    Name the masked objects:mature_Astrocytes
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Th_gfap
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.02
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:39|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
    Select objects to be masked:Neurons_filtered
    Name the masked objects:mature_Astrocyte_filtered
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Th_gfap
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.98
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:40|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
    Select objects to be masked:mature_Astrocyte_filtered
    Name the masked objects:Immature_Astrocytes
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Th_vimentin
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.01
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:41|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
    Select objects to be masked:cellbodies_pax6_positive
    Name the masked objects:Radial_Glia
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Th_vimentin
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.01
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:42|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
    Select objects to be masked:cellbodies_pax6_positive
    Name the masked objects:Neuronal_progenitor
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Th_vimentin
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.99
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

OverlayObjects:[module_num:43|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
    Input:dna_reference
    Name the output image:Neural_Progenitors
    Objects:Neuronal_progenitor
    Opacity:0.3

OverlayObjects:[module_num:44|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
    Input:dna_reference
    Name the output image:Radial_Glia
    Objects:Radial_Glia
    Opacity:0.3

OverlayObjects:[module_num:45|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
    Input:dna_reference
    Name the output image:Immature_Astrocytes
    Objects:Immature_Astrocytes
    Opacity:0.3

OverlayObjects:[module_num:46|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
    Input:dna_reference
    Name the output image:mature_Astrocytes
    Objects:mature_Astrocytes
    Opacity:0.3

OverlayObjects:[module_num:47|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
    Input:dna_reference
    Name the output image:Inhibitory_Neurons
    Objects:Inhibitory_Neurons
    Opacity:0.3

OverlayObjects:[module_num:48|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
    Input:dna_reference
    Name the output image:Excitatory_Neurons
    Objects:Excitatory_Neurons
    Opacity:0.3

SaveImages:[module_num:49|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
    Select the type of image to save:Image
    Select the image to save:Radial_Glia
    Select method for constructing file names:From image filename
    Select image name for file prefix:dna_reference
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Radial_Glia
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:Neural_Progenitors
    Select method for constructing file names:From image filename
    Select image name for file prefix:dna_reference
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Neural_Progenitor
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:Immature_Astrocytes
    Select method for constructing file names:From image filename
    Select image name for file prefix:dna_reference
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Immature_Astrocytes
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:mature_Astrocytes
    Select method for constructing file names:From image filename
    Select image name for file prefix:dna_reference
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Mature_Astrocytes
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:Inhibitory_Neurons
    Select method for constructing file names:From image filename
    Select image name for file prefix:dna_reference
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Inhibitory_Neurons
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:54|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
    Select the type of image to save:Image
    Select the image to save:Excitatory_Neurons
    Select method for constructing file names:From image filename
    Select image name for file prefix:dna_reference
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Excitatory_Neurons
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:55|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Cortical_neuron_DNA
    Overwrite existing files without warning?:Yes
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